PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '1', 'gender': '', 'age': '', 'primary_hand': '', 'first_cue': 'h'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = bd-ai
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Routines
  Routine trial
    ImageComponent cue_hand
      image [set every repeat] = $cue_file_hand
      pos [set every repeat] = (hand_x, 0)
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
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    ImageComponent cue_movement
      image [set every repeat] = $cue_file_movement
      pos [set every repeat] = (0, movement_y)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.3
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    ImageComponent target
      image = images/target.png
      pos [set every repeat] = (target_x, target_y)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'down','left','right','up'
      correctAns = $correct_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = first key
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'cue_file_hand': 'images/hand_left.png', 'hand_x': -0.5, 'cue_file_movement': 'images/arrow_up.png', 'movement_y': 0.5, 'target_x': -0.5, 'target_y': 0.25, 'is_valid': 'both', 'correct_key': 'right'},
      {'cue_file_hand': 'images/hand_left.png', 'hand_x': -0.5, 'cue_file_movement': 'images/arrow_up.png', 'movement_y': 0.5, 'target_x': -0.5, 'target_y': -0.25, 'is_valid': 'hand', 'correct_key': 'left'},
      {'cue_file_hand': 'images/hand_left.png', 'hand_x': -0.5, 'cue_file_movement': 'images/arrow_up.png', 'movement_y': 0.5, 'target_x': 0.5, 'target_y': 0.25, 'is_valid': 'movement', 'correct_key': 'up'},
      {'cue_file_hand': 'images/hand_left.png', 'hand_x': -0.5, 'cue_file_movement': 'images/arrow_up.png', 'movement_y': 0.5, 'target_x': 0.5, 'target_y': -0.25, 'is_valid': 'none', 'correct_key': 'down'},
      {'cue_file_hand': 'images/hand_left.png', 'hand_x': -0.5, 'cue_file_movement': 'images/arrow_down.png', 'movement_y': -0.5, 'target_x': -0.5, 'target_y': 0.25, 'is_valid': 'hand', 'correct_key': 'right'},
      {'cue_file_hand': 'images/hand_left.png', 'hand_x': -0.5, 'cue_file_movement': 'images/arrow_down.png', 'movement_y': -0.5, 'target_x': -0.5, 'target_y': -0.25, 'is_valid': 'both', 'correct_key': 'left'},
      {'cue_file_hand': 'images/hand_left.png', 'hand_x': -0.5, 'cue_file_movement': 'images/arrow_down.png', 'movement_y': -0.5, 'target_x': 0.5, 'target_y': 0.25, 'is_valid': 'none', 'correct_key': 'up'}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
    Routine trial
  LoopTerminator trials
